PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tunnelingTest
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Routines
  Routine trial
    CodeComponent JSCode
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        document.documentElement.style.cursor = 'none';
        // Math related fixes
        pi = Math.PI;
        sin = Math.sin;
        cos = Math.cos;
        sqrt = Math.sqrt;
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
        shuffle = util.shuffle;
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        trialPolygon.vertices = [(-0.4, -0.4), (-0.4, 0.0), (-0.2, 0.4), (0.4, 0.4), (0.2, 0.0), (0.2, -0.4)]
        trialStart.vertices = [(-0.4, -0.4), (0.2, -0.4), (0.2, - 0.5), (-0.4, -0.5)]
        trialEnd.vertices = [(0.4, 0.4), (-0.2, 0.4), (-0.2, 0.5), (0.4, 0.5)]

        trialStep = 0
        steps = []
      Each Frame:
        if trialPolygon.contains(trialMouse):
            trialText.text = "in"
        elif trialStart.contains(trialMouse):
            trialText.text = "in"
            trialStep = 1
        elif trialEnd.contains(trialMouse) and trialStep == 1:
            trialText.text = "in"
            trialStep = 2
            continueRoutine = False
        else:
            trialText.text = "out"
      End Routine:
        thisExp.addData('step', steps)
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    PolygonComponent trialCursor
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      pos [set every frame] = (trialMouse.getPos()[0], trialMouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent trialPolygon
      fillColor = $[1,1,1]
      nVertices = 6
      opacity = 0.2
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent trialStart
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      opacity = 0.2
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent trialEnd
      fillColor = $[-1.000,-1.000,1.000]
      lineColor = $[-1.000,-1.000,1.000]
      opacity = 0.2
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent trialText
      color = $[1.000,1.000,1.000]
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
